# Andrew Zwaniga PhD Thesis Work

# Title: G-value scoring via chemistry processes of Hg197 using mird-07 spectrum and g4em-dna_opt2 and 10000 histories and seed 501152502.
# Purpose: Score the G-values of an isotropic Hg197 point source decaying in the centre of a simple cylindrical DNA model 

# Description: Simulation of a very simple DNA model using a G4_WATER cylinder
# and a basic Hg197 spectrum to calculate the G-values for radiolysis of water

# Remark 1: Time window sizes for chemical stage simulation were selected according to Table 1 in Tian et al. (2017).
# Remark 2: The time window sizes above also essentially agree with the selections made by Ramos-Mendez et al. (2018).
# Tian Z, Jiang SB, Jia X. Phys Med Biol. 2017 Apr 21;62(8):3081-3096. doi: 10.1088/1361-6560/aa6246. Epub 2017 Mar 21. PMID: 28323637; PMCID: PMC5870909.
# Ramos-Méndez J, Perl J, Schuemann J, McNamara A, Paganetti H, Faddegon B. Phys Med Biol. 2018; 63:105014.

# Reference data for Auger electron spectrum: 
# [1] Eckerman, K. F. & Endo, A. MIRD Radionuclide Data and Decay Schemes. https://www.osti.gov/biblio/1042721 (2007).

# [2] Endo, A., Yamaguchi, Y. & Eckerman, K. F. Nuclear Decay Data for Dosimetry Calculation; Revised data of ICRP Publication 38. (2005) doi:10.11484/jaeri-1347.


# ----------- GEOMETRY ----------- #

## World
d:Ge/World/HLX = 100. nm
d:Ge/World/HLY = 100. nm
d:Ge/World/HLZ = 100. nm
b:Ge/World/Invisible = "False"
s:Ge/World/Material = "G4_WATER"

## Simple DNA water cylinder
s:Ge/DNA/Parent = "World"
s:Ge/DNA/Type = "TsCylinder"
s:Ge/DNA/Material = "G4_WATER"
d:Ge/DNA/HLX = 0 nm
d:Ge/DNA/HLY = 0 nm
d:Ge/DNA/HLZ = 0 nm
d:Ge/DNA/RMax = 1 nm # May need adjustment
d:Ge/DNA/HL = 1 nm # May need adjustment
s:Ge/DNA/DrawingStyle = "solid"
s:Ge/DNA/Color = "green"

## Beamposition object is used to define the origin point of the source
s:Ge/Beamposition/Parent = "World"
s:Ge/Beamposition/Type = "Group"
## The source is moved along an axis perpendicular to the symmetry axis of the cylinder
d:Ge/Beamposition/TransY = 0. m
d:Ge/Beamposition/TransZ = 0. m
d:Ge/Beamposition/RotX = 0. deg
d:Ge/Beamposition/RotY = 0. deg
d:Ge/Beamposition/RotZ = 0. deg

# ----------- SOURCE ----------- #

s:So/Hg197O2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197O2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 7 6.72 8.88 54.23 55.93 57.63 58.09 59.79 eV
uv:So/Hg197O2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 7 0.06090449037496253 0.0028465381226462517 0.16823861650265134 0.7330860330011277 0.021035503202122694 0.012794179369337345 0.0010946394271521861 
s:So/Hg197O2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197O2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197O2AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N4AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N4AtomicRelaxationElectrons/BeamEnergySpectrumValues = 37 7.97 10.13 123.02 140.88 144.86 158.74 159.7 162.72 166.7 176.88 177.56 181.54 194.74 196.38 198.72 213.56 226.09 227.79 229.95 230.74 243.95 245.65 247.81 247.93 249.63 251.79 262.77 264.47 266.63 279.95 281.65 283.81 329.16 330.86 332.56 333.02 334.72 eV
uv:So/Hg197N4AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 37 0.005776880219582872 0.00025475894199792503 0.0008734097092696447 0.06697708083654111 0.006125526290533561 0.1336775012664467 0.0016442653954649444 0.4245780703215112 0.005259670783856445 0.0015915494881958616 0.05543443913712194 0.012415053992329188 0.07774263708528932 0.00033155264369910724 0.00509567754813831 0.00165809841579672 0.005470771503706785 0.0016727735171534206 4.006482532345685e-05 0.0006192181500205526 0.05605152919305717 0.054204510308095755 0.002669274215852859 0.061324755028751725 0.002304129897248788 0.00019133715995079244 0.0030119521397336925 0.0005522588101143425 2.8380337936829476e-05 0.00550183039510183 0.00047815077459459533 1.8019389357241775e-05 0.002133154747013315 0.0040359144904983995 9.554839947960597e-05 0.00014476108617412286 1.5493555059663737e-05 
s:So/Hg197N4AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N4AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N4AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N6AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N6AtomicRelaxationElectrons/BeamEnergySpectrumValues = 10 8.36 10.52 23.84 25.54 27.7 73.05 74.75 76.45 76.91 78.61 eV
uv:So/Hg197N6AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 10 0.06674912898549441 0.0007262502493330092 0.2091490191238618 0.036460425266729955 0.0014219744948442076 0.2671247603372898 0.3900516505101649 0.021352276064577992 0.0063605702148778025 0.0006039447528261979 
s:So/Hg197N6AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N6AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N6AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197M4AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197M4AtomicRelaxationElectrons/BeamEnergySpectrumValues = 94 9.95 27.13 76.34 78.04 80.2 805.9 917.02 1015.91 1028.14 1127.03 1199.82 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2281.94 eV
uv:So/Hg197M4AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 94 0.00218467861880597 0.0074029000502348515 0.03863970542409746 0.005186699072706361 0.0002567256431811555 3.3044365697245114e-05 0.0014017644289522745 0.0010409060537423685 0.000827351757685685 0.0052983226018078824 0.03870676912122601 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1.2034047813858016e-06 
s:So/Hg197M4AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197M4AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197M4AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 69 13.75 17.73 32.57 40.44 49.75 58.87 77.3 94.78 98.96 100.66 102.82 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728.64 eV
uv:So/Hg197N1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 69 0.009150872137878732 0.0022795844112350892 0.028186086760066262 0.004256643127089776 0.047753069144702565 0.00579340123550195 0.00634676237622186 0.041709741287938425 0.025438021149843944 0.0409125828046173 0.0011787553960020565 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0.0023424729238410644 
s:So/Hg197N1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N1AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N7AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N7AtomicRelaxationElectrons/BeamEnergySpectrumValues = 8 19.86 21.56 23.72 69.07 70.77 72.47 72.93 74.63 eV
uv:So/Hg197N7AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 8 0.051688573468050544 0.25561625795362447 0.003634896275011747 0.009414062822787577 0.3034312367158117 0.36927251684932655 0.00036437222399481663 0.006578083691392656 
s:So/Hg197N7AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N7AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N7AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 56 20.34 37.52 86.73 88.43 90.59 167.57 185.43 186.0 189.41 203.86 204.25 207.84 221.43 222.68 239.86 270.64 272.34 274.5 289.07 290.77 292.93 405.82 423.68 427.66 441.54 442.5 445.52 449.5 459.68 460.36 464.34 477.54 479.18 481.52 496.36 508.89 510.59 512.75 513.54 526.75 528.45 530.61 530.73 532.43 534.59 545.57 547.27 549.43 562.75 564.45 566.61 611.96 613.66 615.36 615.82 617.52 eV
uv:So/Hg197N2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 56 0.013762807779326256 0.016770412414627126 0.0051900594050937315 0.007804796194464645 0.0005730749510562312 0.03804091963411263 0.14691626857875054 0.006346064124508768 0.32245481961370287 0.04587840386011607 0.02903502299472737 0.011727079723198156 0.042913805769817126 0.025924437047283252 0.005488022404973811 0.016424525652218237 0.02694456860052809 0.0014788213239452256 0.002199293055096047 0.0017193828155970183 0.0002006940677456489 0.0008087115818378382 0.0046016238817734815 0.003150203943580374 0.0030073498571906677 0.011284988746377367 0.019974017850105632 0.0009896677346081047 0.0020299012807478037 0.019653277687173582 0.03758079036708961 0.003962003436113848 0.013756030681594908 0.002287466663474412 0.036461040572756176 0.001913826921521326 0.0012516637086711082 5.1569382507676e-05 0.0013928923107177317 0.0036078109073124057 0.0016296270351543048 0.00018055131035315714 0.008625207187122914 0.0006703874502475065 0.00010038283019730768 0.017699613660341226 0.028564447825186103 0.000891993450500344 0.004158360925645766 0.0014719448627509004 0.00011965195344992018 9.384471433332939e-05 0.00017389217488683338 3.677849409806663e-05 1.4020643226849677e-05 1.1177956462281922e-05 
s:So/Hg197N2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N2AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197L1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197L1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 174 22.61 113.3 201.8 206.52 224.95 444.77 462.63 466.61 481.45 498.63 547.84 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14315.1 eV
uv:So/Hg197L1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 174 0.017950147802452947 0.2557360285291648 0.33149146256665796 0.005009739242096802 0.006794820915050927 0.004344878499683235 0.015147095920661395 0.02006359544344016 0.0030322338095858984 0.0028403981807209222 0.00045133989475518117 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9.494382799753053e-07 
s:So/Hg197L1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197L1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197L1AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197O1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197O1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 11 24.52 26.22 28.38 41.7 43.4 45.56 90.91 92.61 94.31 94.77 96.47 eV
uv:So/Hg197O1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 11 0.07683183600989321 0.18918619393037434 0.005212729214326644 0.3294488735131311 0.2847650152809841 0.007308469500108274 0.0021942433071136438 0.08872977230217909 0.011249544840029602 0.0030598412102140903 0.0020134808916460172 
s:So/Hg197O1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197O1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197O1AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197M1AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197M1AtomicRelaxationElectrons/BeamEnergySpectrumValues = 136 31.12 130.01 141.87 159.73 163.71 178.55 195.73 244.94 246.64 248.8 313.92 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3382.64 eV
uv:So/Hg197M1AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 136 0.06118217109958623 0.06456143793507632 0.011068428791242752 0.03371928376026706 0.04533144748620093 0.01044058281493021 0.013921314862371088 0.004961025335157698 0.006425621383380624 0.000423557305160329 0.021578123063389115 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8.848882730249816e-06 
s:So/Hg197M1AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197M1AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197M1AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197O3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197O3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 5 37.05 38.75 40.45 40.91 42.61 eV
uv:So/Hg197O3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 5 0.028437230053010125 0.5993756433090597 0.35081085628708664 0.0054171610299854085 0.015959109320858 
s:So/Hg197O3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197O3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197O3AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197M2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197M2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 124 56.82 75.25 96.2 184.7 207.32 295.07 295.82 306.21 312.93 316.91 331.75 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3125.54 eV
uv:So/Hg197M2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 124 0.006374344082369792 0.01567727866738462 0.05021975399944071 0.008155819868240785 0.05141527297883007 0.0031353131729774403 0.057864643668253606 0.05024660841911085 0.028474967859621083 0.0266697872465104 0.003842336997125076 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1.4460972377954294e-06 
s:So/Hg197M2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197M2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197M2AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 51 68.68 86.54 87.11 90.52 104.97 105.36 108.95 122.54 123.79 140.97 171.75 173.45 175.61 190.18 191.88 194.04 306.93 324.79 328.77 342.65 343.61 346.63 350.61 360.79 361.47 365.45 378.65 380.29 382.63 397.47 410.0 411.7 413.86 414.65 427.86 429.56 431.72 431.84 433.54 435.7 446.68 448.38 450.54 463.86 465.56 467.72 513.07 514.77 516.47 516.93 518.63 eV
uv:So/Hg197N3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 51 0.01591137937365624 0.009500380270164865 0.07882541975142997 0.021965475909444053 0.1275195614678003 0.012565067385007025 0.15125759483173698 0.040684996346946854 0.08356030149823188 0.10558033243592876 0.007865721986583425 0.013794039637333864 0.0005843173329577974 0.06057641925533213 0.06775267287100108 0.0031633808712431687 1.4856282378881886e-06 0.006279393686469312 0.013650313934437993 0.0007679630250412101 0.0002624687757253206 0.01707874704370158 0.007592809427111966 0.005405042859606748 0.003148196159349112 0.01149192737962915 0.04137002610976922 1.350246568532654e-05 0.050502427904731334 0.00494412845088408 0.00035953275218910226 0.0006521771920304035 4.952181157825182e-07 0.00815432770531553 0.0008826275254813788 0.0043299515156868295 0.00017821767289956454 0.0008486811057602133 0.005546830965781297 0.0004436821655415406 0.00016812293139967867 0.0005544797176314944 7.840093490943231e-06 0.005908955425357926 0.007565229592929729 0.00024767020899345684 4.01228184613488e-05 0.00024631389128853073 0.0002290679062866837 5.845839242797382e-06 1.4333680936953411e-05 
s:So/Hg197N3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N3AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197M3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197M3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 110 79.82 98.25 168.32 186.75 318.07 335.93 339.91 354.75 371.93 406.57 421.14 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2715.24 eV
uv:So/Hg197M3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 110 0.011300216788599679 0.01138998521269622 0.05036448940322955 0.06902075273925898 0.0026286826771037136 0.017212843810596873 0.025093102990749114 0.0021607587879861156 0.007219439555551794 0.015616555734190445 0.0008232505000812529 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5.850236070617952e-07 
s:So/Hg197M3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197M3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197M3AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197N5AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197N5AtomicRelaxationElectrons/BeamEnergySpectrumValues = 35 104.59 122.45 126.43 140.31 141.27 144.29 148.27 158.45 159.13 163.11 176.31 177.95 180.29 195.13 207.66 209.36 211.52 212.31 225.52 227.22 229.38 229.5 231.2 233.36 244.34 246.04 248.2 261.52 263.22 265.38 310.73 312.43 314.13 314.59 316.29 eV
uv:So/Hg197N5AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 35 0.0014711351717780598 0.008778875633093888 0.0717549702365017 0.007928661398727346 0.0015421614011109643 0.2805850640888881 0.21944811138249837 0.003254979951420499 0.005430630717355801 0.07438259889229946 0.01243214146952856 0.00018852492497697482 0.07727873711284881 0.0025157711380389895 0.002042743485434279 0.0072355896624036135 6.583289765893635e-05 0.0009085630471644036 0.0031942730103417926 0.05343488960086791 0.0003082138065726441 0.05026726938496087 0.0936845724381503 0.0028940377029210386 0.00024126327500581188 0.004381927475215516 2.393926253443691e-05 0.0007548190281145769 0.0059544720711718945 3.8152236720593726e-05 4.855282095186899e-05 0.0034806964235461744 0.0038522601574114542 1.7136161525221732e-05 0.00017843253225904268 
s:So/Hg197N5AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197N5AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197N5AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197M5AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197M5AtomicRelaxationElectrons/BeamEnergySpectrumValues = 86 717.4 828.52 927.41 939.64 1038.53 1111.32 1129.75 1137.42 1222.44 1240.87 1321.33 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2193.44 eV
uv:So/Hg197M5AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 86 1.2789788612951724e-06 0.00029542576726331255 0.0023787609092173036 1.2789860884302147e-06 0.006294812940410531 0.0038303671181320956 0.04200924013154317 0.004402040727110558 0.00031973495869148607 0.04319311712281713 0.004023476166461504 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1.66258796220373e-05 
s:So/Hg197M5AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197M5AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197M5AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197L2AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197L2AtomicRelaxationElectrons/BeamEnergySpectrumValues = 165 1106.6 1217.72 1316.61 1500.52 1518.95 1738.77 1756.63 1760.61 1775.45 1792.63 1841.84 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13755.1 eV
uv:So/Hg197L2AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 165 0.00893644232033671 0.061037123733668174 0.01745796613484812 0.06430351883088953 0.0222255014935471 0.001638547024602034 0.0024448983557017797 0.003676762394573246 0.00986214367554614 0.0028427859504539833 0.00540795540817078 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1.4618553857976803e-06 
s:So/Hg197L2AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197L2AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197L2AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197L3AtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197L3AtomicRelaxationElectrons/BeamEnergySpectrumValues = 152 5119.2 5376.3 5633.4 5786.6 6043.7 6219.9 6308.4 6454.0 6477.0 6565.5 6887.3 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11901.1 eV
uv:So/Hg197L3AtomicRelaxationElectrons/BeamEnergySpectrumWeights = 152 0.0011554224933554378 0.0006056494233727379 8.109767358527842e-05 0.0320183907758055 0.05376341945763382 0.0038584259825838072 0.00619705967594933 0.06868418673240394 0.0026316267746304177 0.022756018593193903 0.07188459471385326 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2.0831353307385648e-05 
s:So/Hg197L3AtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197L3AtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197L3AtomicRelaxationElectrons/Component = "Beamposition"

s:So/Hg197KAtomicRelaxationElectrons/BeamEnergySpectrumType = "Discrete"
dv:So/Hg197KAtomicRelaxationElectrons/BeamEnergySpectrumValues = 166 52288.0 52848.0 53408.0 54702.0 55262.0 57116.0 63222.6 63479.7 63782.6 63890.0 64039.7 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80886.5 eV
uv:So/Hg197KAtomicRelaxationElectrons/BeamEnergySpectrumWeights = 166 0.10494135972333914 0.16150146410082275 0.009527604731467151 0.09641580544644258 0.17358899828649754 0.07578700051763064 0.042051291402776136 0.03472396051206583 0.027954218410640892 0.02231317004875362 0.003591432566513176 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1.4405838687898815e-06 
s:So/Hg197KAtomicRelaxationElectrons/BeamParticle = "e-"
s:So/Hg197KAtomicRelaxationElectrons/Type = "Isotropic"
s:So/Hg197KAtomicRelaxationElectrons/Component = "Beamposition"


# ----------- SCORING ----------- #

s:Sc/GValue/Quantity = "TsSBSGValue"
s:Sc/GValue/Component = "DNA"
s:Sc/GValue/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/GValue/OutputType = "ASCII"
s:Sc/GValue/OutputFile = "Hg197-SBSGValue"
b:Sc/GValue/OutputToConsole = "True"
dv:Sc/GValue/TimeToRecord = 20 1.00000e0 2.06913e0 4.28133e0 8.85866e0 1.83298e1 3.79268e1 7.84759e1 1.62377e2 3.35981e2 6.95192e2 1.43844e3 2.97634e3 6.15847e3 1.27427e4 2.63664e4 5.45559e4 1.12883e5 2.33571e5 4.83292e5 9.99999e5 ps

d:Sc/GValue/KillPrimaryIfEnergyLossExceeds = 30 keV
d:Sc/GValue/AbortEventIfPrimaryEnergyLossExceeds = 1.01 * Sc/GValue/KillPrimaryIfEnergyLossExceeds keV
d:Sc/GValue/KillPrimaryBasedOnTrackLength = 5 um

# ----------- PHYSICS ----------- #

sv:Ph/Default/Modules = 2 "g4em-dna_opt2" "g4em-dna-chemistry"

d:Ph/Default/EMRangeMin = 10 eV
d:Ph/Default/SetProductionCutLowerEdge = 10 eV
d:Ph/Default/MaxStepSize = 0.1 nm
b:Ph/Default/Fluorescence = "True"
b:Ph/Default/Auger = "True"
b:Ph/Default/AugerCascade = "True"
b:Ph/Default/DeexcitationIgnoreCut = "True"
d:Ph/Default/DefaultRegionForTheWorld/CutForAllParticles = 0.01 nm

# ----------- CHEMISTRY ----------- #

# TOPAS Default Chemistry Settings
# Copied from TOPAS-nBio2.0/examples/processes/TOPASChemistry.txt [1]
# Alternatively, TOPASChemistry_Extended.txt can be used
# Purpose: Use in radiolysis simulations

# References:
# 1. Schuemann, J. et al. Radiat Res 191, 125–138 (2019).

# Diffusion coefficients
sv:Ch/TOPASChemistry/DiffusionCoefficients/Molecules = 7 "SolvatedElectron" "Hydroxyl"  "Hydrogen"  "Hydronium" "DyHydrogen" "Hydroxide" "HydrogenPeroxide"
dv:Ch/TOPASChemistry/DiffusionCoefficients/Values    = 7  4.90022052437e9 2.2e9 7e9 9.4601846875e9 4.8e9 5.3032890625e9 2.3e9 nm2/s

b:Ch/TOPASChemistry/SetWaterMolecularConfiguration = "False"

# Reaction rates
sv:Ch/TOPASChemistry/Reaction/SolvatedElectron/SolvatedElectron/Products    = 3 "Hydroxide" "Hydroxide" "Dyhydrogen"
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/SolvatedElectron/ReactionRate = 0.647e10 /M/s
b:Ch/TOPASChemistry/Reaction/SolvatedElectron/SolvatedElectron/CompatibleWithStepByStep = "True"

sv:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydroxyl/Products            = 1 "Hydroxide"
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydroxyl/ReactionRate         = 2.953e10 /M/s
b:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydroxyl/CompatibleWithStepByStep = "True"

sv:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydrogen/Products            = 2 "Hydroxide" "Dyhydrogen"
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydrogen/ReactionRate         = 2.652e10 /M/s
b:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydrogen/CompatibleWithStepByStep = "True"

sv:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydronium/Products           = 1 "Hydrogen"
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/Hydronium/ReactionRate        = 2.109e10 /M/s

sv:Ch/TOPASChemistry/Reaction/SolvatedElectron/HydrogenPeroxide/Products    = 2 "Hydroxide" "Hydroxyl"
d:Ch/TOPASChemistry/Reaction/SolvatedElectron/HydrogenPeroxide/ReactionRate = 1.405e10 /M/s

sv:Ch/TOPASChemistry/Reaction/Hydroxyl/Hydroxyl/Products                    = 1 "HydrogenPeroxide"
d:Ch/TOPASChemistry/Reaction/Hydroxyl/Hydroxyl/ReactionRate                 = 0.475e10 /M/s

sv:Ch/TOPASChemistry/Reaction/Hydroxyl/Hydrogen/Products                    = 1 "None"
d:Ch/TOPASChemistry/Reaction/Hydroxyl/Hydrogen/ReactionRate                 = 1.438e10 /M/s

sv:Ch/TOPASChemistry/Reaction/Hydrogen/Hydrogen/Products                    = 1 "Dyhydrogen"
d:Ch/TOPASChemistry/Reaction/Hydrogen/Hydrogen/ReactionRate                 = 0.503e10 /M/s

sv:Ch/TOPASChemistry/Reaction/Hydronium/Hydroxide/Products                  = 1 "None"
d:Ch/TOPASChemistry/Reaction/Hydronium/Hydroxide/ReactionRate               = 11.031e10 /M/s

s:Ch/ChemistryName = "TOPASChemistry"

b:Ch/TOPASChemistry/ChemicalStageTransportActive = "True"
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1 us
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsHighEdges = 5 10.0 100.0 1000.0 10000.0 1000000.0 ps
dv:Ch/TOPASChemistry/ChemicalStageTimeStepsResolutions = 5 0.1 1 3 10 100 ps

# ----------- KEY ADJUSTABLES ----------- #

# Number of threads to use (change to match number of cores requested)
i:Ts/NumberOfThreads = 16
b:Ts/ShowCPUTime = "True"

# Exit if more than 0.1 percent of the total number of histories to be simulated are interrupted
i:Ts/MaxInterruptedHistories = 10
# Stop printing out a report of interrupted histories after this many reports
i:Ts/InterruptedHistoryMaxReports = 10
# Limit the number of reports made about killed tracks
i:Ts/KilledTrackMaxReports = 10
# Exit if more than 0.1 percent of the total number of histories to be simulated have killed tracks
i:Ts/KilledTrackMaxCount = 10

## Modeling parameters that may need adjustment
i:Sc/SimpleSSBandDSB/BasePairDistanceForDefiningDSB = 10
d:Sc/SimpleSSBandDSB/EnergyThresholdForHavingSSB = 0 eV

## Radial position of source relative to DNA molecule axis of symmetry 
d:Ge/Beamposition/TransX = 10. nm

## Parameters that may need adjustment
i:Sc/GValue/TimeBins = 20
d:Sc/GValue/TimeBinMin = 1.0 ps
d:Sc/GValue/TimeBinMax = 999999.0 ps
b:Sc/GValue/TimeBinLog = "True"


## Number of histories to simulate

i:So/Hg197O2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N4AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N6AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197M4AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N7AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197L1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197O1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197M1AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197O3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197M2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197M3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197N5AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197M5AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197L2AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197L3AtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000
i:So/Hg197KAtomicRelaxationElectrons/NumberOfHistoriesInRun = 10000


## Don't print out every history to the console
i:Ts/ShowHistoryCountAtInterval = 1000

i:Ts/seed = 501152502

i:Ts/ChemistryVerbosity = 1

# ------------ GRAPHICS ------------ #
# b:Ts/PauseBeforeQuit = "True"
# s:Gr/MyGraphic1/Type = "OpenGL" # OpenGL, HepRep, VRML, DAWN, RayTracer, RayTracerX
# u:Gr/MyGraphic1/Zoom = 2. # increase to zoom in, decrease to zoom out
# d:Gr/MyGraphic1/Theta = 90. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# d:Gr/MyGraphic1/Phi = 0. deg # view angle as in /vis/viewer/set/viewpointThetaPhi
# u:Gr/MyGraphic1/TransX = 0. # move left or right in the view window
# u:Gr/MyGraphic1/TransY = 0. # move up or down in the view window
# s:Gr/MyGraphic1/Projection = "Perspective" # Defaults to "Orthogonal"
# d:Gr/MyGraphic1/PerspectiveAngle = 10. deg # Increase for stronger perspective effect
# i:Gr/MyGraphic1/WindowSizeX = 600
# i:Gr/MyGraphic1/WindowSizeY = 600
# i:Gr/MyGraphic1/WindowPosX = 0
# i:Gr/MyGraphic1/WindowPosY = 0
# # Remove hidden lines from wireframe geometries, like Geant4’s /vis/viewer/set/hiddenEdge
# b:Gr/MyGraphic1/HiddenLineRemovalForGeometry = "False"
# # Remove hidden trajectories lines from within geometries, like Geant4’s /vis/viewer/set/hiddenMarker
# b:Gr/MyGraphic1/HiddenLineRemovalForTrajectories = "False"
# s:Gr/MyGraphic1/ColorBy = "ParticleType"
# sv:Gr/MyGraphic1/ColorByParticleTypeNames = 9 "e-" "gamma" "Hydroxil" "SolvatedElectron" "HydrogenPeroxide" "Hydrogen" "DiHydrogen" "Oxygen" "Hydronium"
# sv:Gr/MyGraphic1/ColorByParticleTypeColors = 9 "Red" "Green" "Teal" "Brown" "Aqua" "Blue" "Gray" "Orange" "Pink"
